PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = untitled
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent fixation_3
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.1
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    TextComponent text
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.1
      text [set every repeat] = $label
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    KeyboardComponent key_resp
      allowedKeys = "m","z"
      forceEndRoutine = False
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 1.1
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    ImageComponent image
      image [set every repeat] = $stimulus
      pos = (0, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.1
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  Routine feedback
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Check if they responded correctly, incorrectly, or missed
        is_match1 = int(is_match)  # is_match is now treated as a variable from the Excel file

        if not key_resp.keys:  # No response was made
            feedback_message = 'Miss'
        elif key_resp.keys == 'm' and is_match1:  # Correct match response
            feedback_message = 'Correct'
        elif key_resp.keys == 'z' and not is_match1:  # Correct not-match response
            feedback_message = 'Correct'
        else:  # Any other response is incorrect
            feedback_message = 'Incorrect'
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_message
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  Routine Intruduction
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment. This is a research experiment for my undergraduate thesis.

        press 'spacebar' to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine self_other_instructions
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this study, you will be shown two shapes (square and triangle) with two labels (you and stranger). You have to memorize this association.

        - You are represented by a Triangle (You-Triangle)
        -There is a Stranger (an unknown person to you), who is represented by Square (Stranger-Square)

        Take a few minutes to memorize this association. Let me know when you have memorized and ready to proceed to the experiment.

        press 'spacebar' to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine self_other_info
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    ImageComponent square_image
      image = square.png
      pos = (0.3, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent triangle_image
      image = triangle.png
      pos = (-0.3, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent self_label
      letterHeight = 0.05
      pos = (0.3, -0.2)
      startVal [time (s)] = 0.0
      text = self
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    TextComponent other_label
      letterHeight = 0.05
      pos = (-0.3, -0.2)
      startVal [time (s)] = 0.0
      text = other
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = press 'spacebar'to continue
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  Routine self_other_starting
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  Routine Thank_you
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank_You
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  Routine self_other_starting_2
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Your task is to judge whether the shape label pairing is correct or incorrect. If the shape label pairing is correct press 'm' and if its incorrect press 'z'.

        press 'spacebar' to continue
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine break_2
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  Routine trial_2
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    PolygonComponent fixation_2
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent fixation_4
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.1
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    TextComponent text_8
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.1
      text [set every repeat] = $label_2
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    KeyboardComponent key_resp_6
      allowedKeys = "m","z"
      forceEndRoutine = False
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 1.1
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    ImageComponent image_2
      image [set every repeat] = $stimulus_2
      pos = (0, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.1
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  Routine feedback_2
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # Check if they responded correctly, incorrectly, or missed
        is_match1 = int(is_match_2)  # is_match is now treated as a variable from the Excel file

        if not key_resp_6.keys:  # No response was made
            feedback_message_2 = 'Miss'
        elif key_resp_6.keys == 'm' and is_match1:  # Correct match response
            feedback_message_2 = 'Correct'
        elif key_resp_6.keys == 'z' and not is_match1:  # Correct not-match response
            feedback_message_2 = 'Correct'
        else:  # Any other response is incorrect
            feedback_message_2 = 'Incorrect'
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_message_2
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  Routine self_other_instructions_2
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this study, you will be shown two shapes (square and triangle) with two labels (disgusting self and desirable self). You have to memorize this association.

        - Disgusting self is represented by a Triangle (Disgusting self-Triangle) and
        -Desirable self is represented by Square (Desirable self-Square)

        Take a few minutes to memorize this association. Let me know when you have memorized and ready to proceed to the experiment.

        press 'spacebar' to continue
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine self_other_starting_3
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    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Your task is to judge whether the shape label pairing is correct or incorrect. If the shape label pairing is correct press 'm' and if its incorrect press 'z'.

        press 'spacebar' to continue
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine self_other_intro_2
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    ImageComponent square_image_2
      image = square.png
      pos = (0.3, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent triangle_image_2
      image = triangle.png
      pos = (-0.3, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent Disgusting_self_lable
      letterHeight = 0.05
      pos = (-0.3, -0.2)
      startVal [time (s)] = 0.0
      text = disgusting self
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    TextComponent Desirable_self_lable
      letterHeight = 0.05
      pos = (0.3, -0.2)
      startVal [time (s)] = 0.0
      text = desirable self
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_11
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = press 'spacebar'to continue
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  Routine break_3
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    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120.0
      text = Now you will have a break of 2 minutes.
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    TextComponent text_14
      letterHeight = 0.05
      startVal [time (s)] = 120.0
      stopVal [duration (s)] = 30
      text = Break is over press the spacebar to continue the experiment
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 120.0
      stopVal [duration (s)] = 30
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Flow
  Routine Intruduction
  Routine self_other_instructions
  Routine self_other_info
  Routine self_other_starting_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Book1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimulus': 'square.png', 'label': 'self', 'is_match': 1, 'shouldpress': 'M'},
      {'stimulus': 'triangle.png', 'label': 'other', 'is_match': 1, 'shouldpress': 'M'},
      {'stimulus': 'square.png', 'label': 'other', 'is_match': 0, 'shouldpress': 'Z'},
      {'stimulus': 'triangle.png', 'label': 'self', 'is_match': 0, 'shouldpress': 'Z'}]
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine break_3
  Routine self_other_instructions_2
  Routine self_other_intro_2
  Routine self_other_starting_3
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Book2.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'stimulus_2': 'square.png', 'label_2': 'desirable self', 'is_match_2': 1, 'shouldpress_2': 'M'},
      {'stimulus_2': 'triangle.png', 'label_2': 'disgusting self', 'is_match_2': 1, 'shouldpress_2': 'M'},
      {'stimulus_2': 'square.png', 'label_2': 'disgusting self', 'is_match_2': 0, 'shouldpress_2': 'Z'},
      {'stimulus_2': 'triangle.png', 'label_2': 'desirable self', 'is_match_2': 0, 'shouldpress_2': 'Z'}]
    Routine trial_2
    Routine feedback_2
  LoopTerminator trials_2
  Routine Thank_you
