PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = untitled
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent fixation_3
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
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    TextComponent text
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $label
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    KeyboardComponent key_resp
      allowedKeys = "m","z"
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.1
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    ImageComponent image
      image [set every repeat] = $stimulus
      pos = (0, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
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  Routine feedback
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Check if they responded correctly, incorrectly, or missed
        is_match1 = int(is_match_b)  # is_match_b is now treated as a variable from the Excel file

        if not key_resp.keys:  # No response was made
            feedback_message = 'Miss'
        elif key_resp.keys == 'm' and is_match1:  # Correct match response
            feedback_message = 'Correct'
        elif key_resp.keys == 'z' and not is_match1:  # Correct not-match response
            feedback_message = 'Correct'
        else:  # Any other response is incorrect
            feedback_message = 'Incorrect'
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_message
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  Routine Intruduction
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment. This is a research experiment for my undergraduate thesis.

        press 'spacebar' to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine self_other_instructions
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this study, you will be shown two shapes (square and triangle) with two labels (you and stranger). You have to memorize this association.

        - You are represented by a Square (You-Square)
        -There is a Stranger (an unknown person to you), who is represented by Triangle (Stranger-Triangle)

        Take a few minutes to memorize this association. Let me know when you have memorized and ready to proceed to the experiment.

        press 'spacebar' to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine self_other_info
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    ImageComponent square_image
      image = square.png
      pos = (0.3, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent triangle_image
      image = triangle.png
      pos = (-0.3, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent self_label
      letterHeight = 0.05
      pos = (-0.3, -0.2)
      startVal [time (s)] = 0.0
      text = stranger
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    TextComponent other_label
      letterHeight = 0.05
      pos = (0.3, -0.2)
      startVal [time (s)] = 0.0
      text = you
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = press 'spacebar' to continue
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  Routine self_other_starting
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  Routine Thank_you
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank_You
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  Routine self_other_starting_2
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Your task is to judge whether the shape label pairing is match or non match. If the shape label pairing is match press 'm' and if its non match press 'z'.

        press 'spacebar' to continue
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine break_2
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  Routine trial_2
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    PolygonComponent fixation_2
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent fixation_4
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
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    TextComponent text_8
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $label_2b
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    KeyboardComponent key_resp_6
      allowedKeys = "m","z"
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.1
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    ImageComponent image_2
      image [set every repeat] = $stimulus_2b
      pos = (0, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
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  Routine feedback_2
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # Check if they responded correctly, incorrectly, or missed
        is_match1 = int(is_match_2b)  # is_match_2b is now treated as a variable from the Excel file

        if not key_resp_6.keys:  # No response was made
            feedback_message_2 = 'Miss'
        elif key_resp_6.keys == 'm' and is_match1:  # Correct match response
            feedback_message_2 = 'Correct'
        elif key_resp_6.keys == 'z' and not is_match1:  # Correct not-match response
            feedback_message_2 = 'Correct'
        else:  # Any other response is incorrect
            feedback_message_2 = 'Incorrect'
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_message_2
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  Routine break_3
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    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Now you will have a break of 2 minutes.
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    TextComponent text_14
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
      text = Break is over press the spacebar to continue the experiment
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
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  Routine code_a
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        # Randomly choose the order of loops
        from random import shuffle

        # List of loop names (corresponding to your routines)
        loops = ['Routine1', 'Routine2']

        # Shuffle the list to randomize the order
        shuffle(loops)

        # Store the randomized order
        first_loop = loops[0]  # This will be the loop that runs first
        second_loop = loops[1]  # This will be the loop that runs second

        # Print out the order (for debugging purposes)
        print(f'Order of loops: {first_loop} followed by {second_loop}')
  Routine code_b
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Experiment:
        # Check if Routine1 or Routine2 is first
        if first_loop == 'Routine1':
            continueRoutine = True  # Allow Routine1 to run
        else:
            continueRoutine = False  # Skip Routine1 and run Routine2 first
  Routine code_c
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        # Check if Routine2 is second, run it
        if second_loop == 'Routine2':
            continueRoutine = True  # Routine2 runs second
        else:
            continueRoutine = False  # Routine1 runs second
  Routine practice2
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    PolygonComponent p_fixation_2
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent p_fixation_4
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
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    TextComponent p_text_8
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $label_2b
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    KeyboardComponent key_resp_6_p
      allowedKeys = "m","z"
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.1
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    ImageComponent p_image_2
      image [set every repeat] = $stimulus_2b
      pos = (0, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
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  Routine start2
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    TextComponent start_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press 'spacebar' to continue
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback_2_p
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        # Check if they responded correctly, incorrectly, or missed
        is_match1 = int(is_match_2b)  # is_match_2b is now treated as a variable from the Excel file

        if not key_resp_6_p.keys:  # No response was made
            feedback_message_2 = 'Miss'
        elif key_resp_6_p.keys == 'm' and is_match1:  # Correct match response
            feedback_message_2 = 'Correct'
        elif key_resp_6_p.keys == 'z' and not is_match1:  # Correct not-match response
            feedback_message_2 = 'Correct'
        else:  # Any other response is incorrect
            feedback_message_2 = 'Incorrect'
    TextComponent text_16
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_message_2
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  Routine self_instructions_2
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this study, you will be shown two shapes (circle and diamond) with two labels (disgusting self and desirable self). You have to memorize this association.

        - Disgusting self is represented by a Circle (Disgusting self-Circle) and
        -Desirable self is represented by Diamond (Desirable self-Diamond)

        Take a few minutes to memorize this association. Let me know when you have memorized and ready to proceed to the experiment.

        press 'spacebar' to continue
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine self_intro_2
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    ImageComponent circle_image
      image = circle.png
      pos = (0.3, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent diamond_image
      image = diamond.png
      pos = (-0.3, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent Disgusting_self_lable
      letterHeight = 0.05
      pos = (0.3, -0.2)
      startVal [time (s)] = 0.0
      text = disgusting self
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    TextComponent Desirable_self_lable
      letterHeight = 0.05
      pos = (-0.3, -0.2)
      startVal [time (s)] = 0.0
      text = desirable self
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_11
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = press 'spacebar' to continue
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  Routine self_starting_3
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    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Your task is to judge whether the shape label pairing is match or non match. If the shape label pairing is match press 'm' and if its non match press 'z'.

        press 'spacebar' to continue
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_
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  Routine b1
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    PolygonComponent p_fication
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent p_fixation_3
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
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    TextComponent p_text
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $label_b
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    KeyboardComponent key_resp_p
      allowedKeys = "m","z"
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.1
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    ImageComponent p_image
      image [set every repeat] = $stimulus_b
      pos = (0, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
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  Routine b_feedback
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # Check if they responded correctly, incorrectly, or missed
        is_match1 = int(is_match_b)  # is_match_b is now treated as a variable from the Excel file

        if not key_resp_p.keys:  # No response was made
            feedback_message = 'Miss'
        elif key_resp_p.keys == 'm' and is_match1:  # Correct match response
            feedback_message = 'Correct'
        elif key_resp_p.keys == 'z' and not is_match1:  # Correct not-match response
            feedback_message = 'Correct'
        else:  # Any other response is incorrect
            feedback_message = 'Incorrect'
    TextComponent text_15
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_message
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Flow
  Routine Intruduction
  Routine self_other_instructions
  Routine self_other_info
  Routine self_other_starting_2
  LoopInitiator p_trials loopType="TrialHandler"
    conditionsFile = B_block1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimulus_b': 'square.png', 'label_b': 'you', 'is_match_b': 1, 'shouldpress_b': 'M'},
      {'stimulus_b': 'triangle.png', 'label_b': 'stranger', 'is_match_b': 1, 'shouldpress_b': 'M'},
      {'stimulus_b': 'square.png', 'label_b': 'stranger', 'is_match_b': 0, 'shouldpress_b': 'Z'},
      {'stimulus_b': 'triangle.png', 'label_b': 'you', 'is_match_b': 0, 'shouldpress_b': 'Z'}]
    Routine b1
    Routine b_feedback
  LoopTerminator p_trials
  Routine start2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = B_block1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimulus_b': 'square.png', 'label_b': 'you', 'is_match_b': 1, 'shouldpress_b': 'M'},
      {'stimulus_b': 'triangle.png', 'label_b': 'stranger', 'is_match_b': 1, 'shouldpress_b': 'M'},
      {'stimulus_b': 'square.png', 'label_b': 'stranger', 'is_match_b': 0, 'shouldpress_b': 'Z'},
      {'stimulus_b': 'triangle.png', 'label_b': 'you', 'is_match_b': 0, 'shouldpress_b': 'Z'}]
    Routine b1
    Routine b_feedback
  LoopTerminator trials
  Routine break_3
  Routine self_instructions_2
  Routine self_intro_2
  Routine self_starting_3
  LoopInitiator p_trials_2 loopType="TrialHandler"
    conditionsFile = B_block2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimulus_2b': 'circle.png', 'label_2b': 'disgusting self', 'is_match_2b': 1, 'shouldpress_2b': 'S'},
      {'stimulus_2b': 'diamond.png', 'label_2b': 'desirable self', 'is_match_2b': 1, 'shouldpress_2b': 'M'},
      {'stimulus_2b': 'circle.png', 'label_2b': 'desirable self', 'is_match_2b': 0, 'shouldpress_2b': 'Z'},
      {'stimulus_2b': 'diamond.png', 'label_2b': 'disgusting self', 'is_match_2b': 0, 'shouldpress_2b': 'Z'}]
    Routine practice2
    Routine feedback_2_p
  LoopTerminator p_trials_2
  Routine start2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = B_block2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimulus_2b': 'circle.png', 'label_2b': 'disgusting self', 'is_match_2b': 1, 'shouldpress_2b': 'S'},
      {'stimulus_2b': 'diamond.png', 'label_2b': 'desirable self', 'is_match_2b': 1, 'shouldpress_2b': 'M'},
      {'stimulus_2b': 'circle.png', 'label_2b': 'desirable self', 'is_match_2b': 0, 'shouldpress_2b': 'Z'},
      {'stimulus_2b': 'diamond.png', 'label_2b': 'disgusting self', 'is_match_2b': 0, 'shouldpress_2b': 'Z'}]
    Routine trial_2
    Routine feedback_2
  LoopTerminator trials_2
  Routine Thank_you
