PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = untitled
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $label
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    KeyboardComponent key_resp
      allowedKeys = "n","m"
      forceEndRoutine = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.0
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    ImageComponent image
      image [set every repeat] = $stimulus
      pos = (0, 0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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  Routine feedback
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Check if they responded correctly, incorrectly, or missed
        is_match1 = int(is_match)  # is_match is now treated as a variable from the Excel file

        if not key_resp.keys:  # No response was made
            feedback_message = 'Miss'
        elif key_resp.keys == 'm' and is_match1:  # Correct match response
            feedback_message = 'Correct'
        elif key_resp.keys == 'n' and not is_match1:  # Correct not-match response
            feedback_message = 'Correct'
        else:  # Any other response is incorrect
            feedback_message = 'Incorrect'
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_message
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  Routine Intruduction
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Your task is to judge whether the presented shape-label paring is match or non-match.

        - If the shape-label paring was a match, press “M”
        - If the shape-label pairing was a non-match, press “N”

        Repond as quickly as possible.

        Press space to continue
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine self_other_instructions
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The square is self
        The triangle is other

        Press spacebar to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Intruduction
  Routine self_other_instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Book1.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'stimulus': 'square.png', 'label': 'self', 'is_match': 1},
      {'stimulus': 'triangle.png', 'label': 'other', 'is_match': 1},
      {'stimulus': 'square.png', 'label': 'other', 'is_match': 0},
      {'stimulus': 'triangle.png', 'label': 'self', 'is_match': 0}]
    Routine trial
    Routine feedback
  LoopTerminator trials
